
/gate/geometry/setMaterialDatabase    ./GateMaterials.db


#=====================================================
# GEOMETRY
#=====================================================
/gate/world/geometry/setXLength         400 cm
/gate/world/geometry/setYLength         400 cm
/gate/world/geometry/setZLength         400 cm

/gate/world/daughters/name            cylindricalPET
/gate/world/daughters/insert          cylinder
/gate/cylindricalPET/placement/setTranslation    0.0 0.0 0.0 cm
/gate/cylindricalPET/geometry/setRmin         39.9 mm
/gate/cylindricalPET/geometry/setRmax         52.0 mm
/gate/cylindricalPET/geometry/setHeight         40.2 mm
/gate/cylindricalPET/setMaterial                 Air

/gate/cylindricalPET/daughters/name            head
/gate/cylindricalPET/daughters/insert          box
/gate/head/placement/setTranslation    44 0 0 cm
/gate/head/geometry/setXLength         8 cm
/gate/head/geometry/setYLength         32 cm
/gate/head/geometry/setZLength         40 cm
/gate/head/setMaterial                 Air

/gate/head/daughters/name            block
/gate/head/daughters/insert          box
/gate/block/geometry/setXLength         30 mm
/gate/block/geometry/setYLength         16 mm
/gate/block/geometry/setZLength         20 mm
/gate/block/setMaterial                 Air

/gate/block/daughters/name            crystal
/gate/block/daughters/insert          box
/gate/crystal/geometry/setXLength         30 mm
/gate/crystal/geometry/setYLength         3 mm
/gate/crystal/geometry/setZLength         3.8 mm
/gate/crystal/setMaterial                 Air

/gate/crystal/daughters/name            LSO
/gate/crystal/daughters/insert          box
/gate/LSO/placement/setTranslation    -0.75 0.0 0.0 cm
/gate/LSO/geometry/setXLength         15 mm
/gate/LSO/geometry/setYLength         3.0 mm
/gate/LSO/geometry/setZLength         3.8 mm
/gate/LSO/setMaterial                 LSO

/gate/crystal/daughters/name            BGO
/gate/crystal/daughters/insert          box
/gate/BGO/placement/setTranslation    0.75 0.0 0.0 cm
/gate/BGO/geometry/setXLength         15 mm
/gate/BGO/geometry/setYLength         3.0 mm
/gate/BGO/geometry/setZLength         3.8 mm
/gate/BGO/setMaterial                 BGO
/gate/crystal/repeaters/insert          cubicArray
/gate/crystal/cubicArray/setRepeatNumberX        1  
/gate/crystal/cubicArray/setRepeatNumberY        5  
/gate/crystal/cubicArray/setRepeatNumberZ        5  
/gate/crystal/cubicArray/setRepeatVector         0.0 3.2 4.0 cm 

/gate/block/repeaters/insert          cubicArray
/gate/block/cubicArray/setRepeatNumberX        1  
/gate/block/cubicArray/setRepeatNumberY        20  
/gate/block/cubicArray/setRepeatNumberZ        20  
/gate/block/cubicArray/setRepeatVector         0.0 1.6 2.0 cm 

/gate/head/repeaters/insert          ring
/gate/head/ring/setRepeatNumber 4


/gate/world/daughters/name            voxelized_phantom
/gate/world/daughters/insert          ImageRegularParametrisedVolume
/gate/voxelized_phantom/geometry/setImage         phan.h33
/gate/voxelized_phantom/geometry/setRangeToMaterialFile         mat_range.dat

/gate/systems/cylindricalPET/rsector/attach   head
/gate/systems/cylindricalPET/module/attach   block
/gate/systems/cylindricalPET/crystal/attach   crystal
/gate/systems/cylindricalPET/layer0/attach   LSO
/gate/systems/cylindricalPET/layer1/attach   BGO

/gate/crystal/attachCrystalSD

/gate/voxelized_phantom/attachPhantomSD



#=====================================================
# DIGITIZER
#=====================================================
/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel


/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel


/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-

/gate/physics/processes/ElectronIonisation/setModel StandardModel e+


/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel LivermoreModel


/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-

/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+


/gate/physics/addProcess PositronAnnihilation

/gate/physics/addProcess RadioactiveDecay

/gate/physics/addProcess MultipleScattering e+

/gate/physics/addProcess MultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized
/gate/physics/Gamma/SetCutInRegion      crystal 0.1 mm
/gate/physics/Electron/SetCutInRegion      crystal 0.1 mm
/gate/physics/Positron/SetCutInRegion      crystal 0.1 mm

/gate/physics/Gamma/SetCutInRegion      voxelized_phantom 0.1 mm
/gate/physics/Electron/SetCutInRegion      voxelized_phantom 0.1 mm
/gate/physics/Positron/SetCutInRegion      voxelized_phantom 0.1 mm



#=====================================================
# DIGITIZER
#=====================================================
/gate/digitizer/Singles/insert adder

/gate/digitizer/Singles/insert readout
/gate/digitizer/Singles/readout/setPolicy TakeEnergyCentroid
/gate/digitizer/Singles/readout/setDepth  1
/gate/digitizer/Singles/insert blurring
/gate/digitizer/Singles/blurring/setResolution 0.26
/gate/digitizer/Singles/blurring/setEnergyOfReference 511.0 keV

/gate/digitizer/Singles/insert thresholder
/gate/digitizer/Singles/thresholder/setThreshold 250.0 keV

/gate/digitizer/Singles/insert upholder
/gate/digitizer/Singles/upholder/setUphold 650.0 keV


/gate/digitizer/Coincidences/setWindow 10 ns

/gate/digitizer/name delay
/gate/digitizer/delay/setWindow 10 ns
/gate/digitizer/delay/setOffset  500 ns

#=====================================================
# INITIALISATION
#=====================================================
/gate/run/initialize

#=====================================================
# SOURCE
#=====================================================
/gate/source/addSource voxelized_gamma voxel
/gate/source/voxelized_gamma/reader/insert interfile
/gate/source/voxelized_gamma/interfileReader/translator/insert range 
/gate/source/voxelized_gamma/interfileReader/rangeTranslator/readTable act_range.dat
/gate/source/voxelized_gamma/interfileReader/readFile  act.h33

/gate/source/voxelized_gamma/gps/particle gamma 
/gate/source/voxelized_gamma/setType backtoback
/gate/source/voxelized_gamma/gps/monoenergy 511 keV
/gate/source/voxelized_gamma/setForcedUnstableFlag true
/gate/source/voxelized_gamma/setForcedHalfLife 6586.2 s

/gate/source/voxelized_gamma/gps/angtype iso
/gate/source/voxelized_gamma/gps/mintheta 0 deg 
/gate/source/voxelized_gamma/gps/maxtheta 180 deg
/gate/source/voxelized_gamma/gps/minphi   0 deg
/gate/source/voxelized_gamma/gps/maxphi   360 deg


/gate/source/list


#=====================================================
# PARAMETER
#=====================================================
/gate/random/setEngineName JamesRandom
/gate/random/setEngineSeed auto

/gate/output/root/enable
/gate/output/root/setFileName pet
/gate/output/root/setRootHitFlag 1
/gate/output/root/setRootSinglesFlag 1
/gate/output/root/setRootCoincidencesFlag 1
/gate/output/root/setRootdelayFlag 1

/gate/application/setTimeStart 0.0 s
/gate/application/setTimeStop 1.0 s
/gate/application/setTimeSlice 1.0 s
/gate/application/startDAQ




