
/gate/geometry/setMaterialDatabase    ./GateMaterials.db


#=====================================================
# GEOMETRY
#=====================================================
/gate/world/geometry/setXLength         400 cm
/gate/world/geometry/setYLength         400 cm
/gate/world/geometry/setZLength         400 cm

/gate/world/daughters/name            OpticalSystem
/gate/world/daughters/insert          box
/gate/OpticalSystem/geometry/setXLength         5.0 cm
/gate/OpticalSystem/geometry/setYLength         5.0 cm
/gate/OpticalSystem/geometry/setZLength         5.0 cm
/gate/OpticalSystem/setMaterial                 Air

/gate/OpticalSystem/daughters/name            crystal
/gate/OpticalSystem/daughters/insert          box
/gate/crystal/placement/setTranslation    0.0 0.0 5.0 mm
/gate/crystal/geometry/setXLength         30 mm
/gate/crystal/geometry/setYLength         30 mm
/gate/crystal/geometry/setZLength         10 mm
/gate/crystal/setMaterial                 LYSO

/gate/crystal/daughters/name            pixel
/gate/crystal/daughters/insert          box
/gate/pixel/placement/setTranslation    0 0 -0.5 mm
/gate/pixel/geometry/setXLength         3.0 mm
/gate/pixel/geometry/setYLength         3.0 mm
/gate/pixel/geometry/setZLength         1.0 mm
/gate/pixel/setMaterial                 G4_SILICON_DIOXIDE
/gate/pixel/repeaters/insert          cubicArray
/gate/pixel/cubicArray/setRepeatNumberX        10  
/gate/pixel/cubicArray/setRepeatNumberY        10  
/gate/pixel/cubicArray/setRepeatNumberZ        10  
/gate/pixel/cubicArray/setRepeatVector         3.0 3.0 0.0 mm 


/gate/systems/OpticalSystem/crystal/attach   crystal
/gate/systems/OpticalSystem/pixel/attach   pixel

/gate/crystal/attachCrystalSD


/gate/crystal/surfaces/name                     surface1
/gate/crystal/surfaces/insert                   OpticalSystem
/gate/crystal/surfaces/surface1/setSurface    rough_teflon_warpped  

/gate/OpticalSystem/surfaces/name                     surface2
/gate/OpticalSystem/surfaces/insert                   crystal
/gate/OpticalSystem/surfaces/surface2/setSurface    rough_teflon_warpped  

/gate/crystal/surfaces/name                     Detection1
/gate/crystal/surfaces/insert                   pixel
/gate/crystal/surfaces/Detection1/setSurface    perfect_apd  

/gate/pixel/surfaces/name                     Detection2
/gate/pixel/surfaces/insert                   crystal
/gate/pixel/surfaces/Detection2/setSurface    perfect_apd  



#=====================================================
# DIGITIZER
#=====================================================
/gate/physics/addProcess OpticalAbsorption

/gate/physics/addProcess OpticalRayleigh

/gate/physics/addProcess OpticalBoundary

/gate/physics/addProcess OpticalMie

/gate/physics/addProcess OpticalWLS

/gate/physics/addProcess Scintillation

/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel


/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel


/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel


/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-

/gate/physics/processes/ElectronIonisation/setModel StandardModel e+


/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-

/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+


/gate/physics/addProcess eMultipleScattering e+

/gate/physics/addProcess eMultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized


#=====================================================
# DIGITIZER
#=====================================================
/gate/digitizer/Singles/insert opticaladder

/gate/digitizer/Singles/insert readout
/gate/digitizer/Singles/readout/setPolicy TakeEnergyCentroid
/gate/digitizer/Singles/readout/setDepth  1

#=====================================================
# INITIALISATION
#=====================================================
/gate/run/initialize

#=====================================================
# SOURCE
#=====================================================
/gate/source/addSource sphere_source
/gate/source/sphere_source/gps/type Volume
/gate/source/sphere_source/gps/shape Sphere
/gate/source/sphere_source/gps/radius 0.1 mm

# Placement
/gate/source/sphere_source/gps/centre 0 0 0 mm
/gate/source/sphere_source/gps/particle gamma 
/gate/source/sphere_source/gps/monoenergy 511 keV
/gate/source/sphere_source/setForcedUnstableFlag true
/gate/source/sphere_source/setForcedHalfLife 6586.2 s

/gate/source/sphere_source/setActivity 1000 becquerel
/gate/source/sphere_source/gps/angtype iso
/gate/source/sphere_source/gps/mintheta 90 deg 
/gate/source/sphere_source/gps/maxtheta 90 deg
/gate/source/sphere_source/gps/minphi   0 deg
/gate/source/sphere_source/gps/maxphi   0 deg


/gate/source/list


#=====================================================
# PARAMETER
#=====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto

/gate/output/root/enable
/gate/output/root/setFileName optical
/gate/output/root/setRootHitFlag 1
/gate/output/root/setRootSinglesFlag 1
/gate/output/root/setRootCoincidencesFlag 0
/gate/output/root/setRootdelayFlag 0

/gate/application/setTotalNumberOfPrimaries 10000
/gate/application/start




